PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine intrucciones_prueba
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ENSAYOS DE PRUEBA (no se tendrán en cuenta en el experimento).

        De todos los objetos con peso menor a 500 gr marque 1 si el que aparece se nombra en femenino ej. ‘la pala’ vs ‘el pelo’. Pulse ESPACIO para continuar.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prueba_uno
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image
      image [set every repeat] = $puno
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_2
      allowedKeys = '1','0'
      correctAns = rpuno
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine condicion_uno
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_3
      image [set every repeat] = $conduno
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_4
      allowedKeys = '1','0'
      correctAns = runo
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine prueba_dos
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    PolygonComponent polygon_3
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_2
      image [set every repeat] = $pdos
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_3
      allowedKeys = '1','0'
      correctAns = rpdos
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine condicion_dos
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    PolygonComponent polygon_4
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_4
      image [set every repeat] = $conddos
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_5
      allowedKeys = '1','0'
      correctAns = rdos
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Agradecimiento
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ¡Muchas gracias por participar en este experimento! :)
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  Routine insprubdos
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ENSAYOS DE PRUEBA (no se tendrán en cuenta en el experimento).

        De todos los objetos con nombre femenino marque 1 si el que aparece pesa menos de 500 gramos ej. ‘la pala’ vs ‘la casa’. Pulse ESPACIO para continuar.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins_cond_dos
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        CONDICIÓN EXPERIMENTAL 2.

        De todos los objetos con nombre femenino marque 1 si el que aparece pesa menos de 500 gramos ej. ‘la pala’ vs ‘la casa’. Pulse ESPACIO para continuar.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine i_cond_uno
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        CONDICIÓN EXPERIMENTAL UNO.

        De todos los objetos con peso menor a 500 gr marque 1 si el que aparece se nombra en femenino ej. ‘la pala’ vs ‘el pelo’. Pulse ESPACIO para continuar.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intrucciones_prueba
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = seleccion_semantica_prueba.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'puno': 'cuno/prueba/1.png', 'pdos': 'cdos/prueba/1.png', 'rpuno': 0, 'rpdos': 0},
      {'puno': 'cuno/prueba/2.png', 'pdos': 'cdos/prueba/2.png', 'rpuno': 1, 'rpdos': 1},
      {'puno': 'cuno/prueba/3.png', 'pdos': 'cdos/prueba/3.png', 'rpuno': 0, 'rpdos': 0},
      {'puno': 'cuno/prueba/4.png', 'pdos': 'cdos/prueba/4.png', 'rpuno': 0, 'rpdos': 0}]
    Routine prueba_uno
  LoopTerminator trials
  Routine i_cond_uno
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = seleccion_semantica.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'conduno': 'cuno/ensayos/1.png', 'conddos': 'cdos/ensayos/1.png', 'runo': 0, 'rdos': 1},
      {'conduno': 'cuno/ensayos/2.png', 'conddos': 'cdos/ensayos/2.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/3.png', 'conddos': 'cdos/ensayos/3.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/4.png', 'conddos': 'cdos/ensayos/4.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/5.png', 'conddos': 'cdos/ensayos/5.png', 'runo': 1, 'rdos': 1},
      {'conduno': 'cuno/ensayos/6.png', 'conddos': 'cdos/ensayos/6.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/7.png', 'conddos': 'cdos/ensayos/7.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/8.png', 'conddos': 'cdos/ensayos/8.png', 'runo': 1, 'rdos': 0},
      {'conduno': 'cuno/ensayos/9.png', 'conddos': 'cdos/ensayos/9.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/10.png', 'conddos': 'cdos/ensayos/10.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/11.png', 'conddos': 'cdos/ensayos/11.png', 'runo': 0, 'rdos': 1},
      {'conduno': 'cuno/ensayos/12.png', 'conddos': 'cdos/ensayos/12.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/13.png', 'conddos': 'cdos/ensayos/13.png', 'runo': 1, 'rdos': 1},
      {'conduno': 'cuno/ensayos/14.png', 'conddos': 'cdos/ensayos/14.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/15.png', 'conddos': 'cdos/ensayos/15.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/16.png', 'conddos': 'cdos/ensayos/16.png', 'runo': 0, 'rdos': 0}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
    Routine condicion_uno
  LoopTerminator trials_3
  Routine insprubdos
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = seleccion_semantica_prueba.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'puno': 'cuno/prueba/1.png', 'pdos': 'cdos/prueba/1.png', 'rpuno': 0, 'rpdos': 0},
      {'puno': 'cuno/prueba/2.png', 'pdos': 'cdos/prueba/2.png', 'rpuno': 1, 'rpdos': 1},
      {'puno': 'cuno/prueba/3.png', 'pdos': 'cdos/prueba/3.png', 'rpuno': 0, 'rpdos': 0},
      {'puno': 'cuno/prueba/4.png', 'pdos': 'cdos/prueba/4.png', 'rpuno': 0, 'rpdos': 0}]
    Routine prueba_dos
  LoopTerminator trials_2
  Routine ins_cond_dos
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = seleccion_semantica.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'conduno': 'cuno/ensayos/1.png', 'conddos': 'cdos/ensayos/1.png', 'runo': 0, 'rdos': 1},
      {'conduno': 'cuno/ensayos/2.png', 'conddos': 'cdos/ensayos/2.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/3.png', 'conddos': 'cdos/ensayos/3.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/4.png', 'conddos': 'cdos/ensayos/4.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/5.png', 'conddos': 'cdos/ensayos/5.png', 'runo': 1, 'rdos': 1},
      {'conduno': 'cuno/ensayos/6.png', 'conddos': 'cdos/ensayos/6.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/7.png', 'conddos': 'cdos/ensayos/7.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/8.png', 'conddos': 'cdos/ensayos/8.png', 'runo': 1, 'rdos': 0},
      {'conduno': 'cuno/ensayos/9.png', 'conddos': 'cdos/ensayos/9.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/10.png', 'conddos': 'cdos/ensayos/10.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/11.png', 'conddos': 'cdos/ensayos/11.png', 'runo': 0, 'rdos': 1},
      {'conduno': 'cuno/ensayos/12.png', 'conddos': 'cdos/ensayos/12.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/13.png', 'conddos': 'cdos/ensayos/13.png', 'runo': 1, 'rdos': 1},
      {'conduno': 'cuno/ensayos/14.png', 'conddos': 'cdos/ensayos/14.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/15.png', 'conddos': 'cdos/ensayos/15.png', 'runo': 0, 'rdos': 0},
      {'conduno': 'cuno/ensayos/16.png', 'conddos': 'cdos/ensayos/16.png', 'runo': 0, 'rdos': 0}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
    Routine condicion_dos
  LoopTerminator trials_4
  Routine Agradecimiento
